PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = TEST
  Screen = 1
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Routines
  Routine fixation
    TextComponent fixCross1
      stopVal [duration (s)] = 6.0
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine Movie
    MovieComponent movie
      movie = /Users/jangrawdc/Documents/Python/PsychoPyParadigms/BasicExperiments/Movies/Paperman.mp4
      stopVal [duration (s)] = 10.0
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      backend = moviepy
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    TextComponent fixCross
      stopVal [duration (s)] = 5.0
      text = +
      startVal [time (s)] = 10.0
      letterHeight = 0.5
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  Routine CoolDown
    TextComponent CoolDownText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please stay still until
        the scanner noise stops.
    KeyboardComponent EndKey
      forceEndRoutine = True
      allowedKeys = 'q','escape'
      startVal [time (s)] = 0.0
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  Routine Trigger
    TextComponent TriggerText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Waiting for trigger...

        (Experimenter: press t to override.)
    KeyboardComponent TriggerKey
      forceEndRoutine = True
      allowedKeys = 't'
      startVal [time (s)] = 0.0
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Flow
  Routine Trigger
  Routine fixation
  LoopInitiator Movies loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine Movie
  LoopTerminator Movies
  Routine fixation
  Routine CoolDown
