PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = BuilderTest
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 2.0
      image = face1.jpg
      size = (0.5, 0.5)
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    TextComponent text
      text = Please enjoy this face.
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    TextComponent cross
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '1','2','left','right','space'
      startVal [time (s)] = 2.0
      store = all keys
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  Routine instr
    TextComponent text_2
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Press 1 if the face is female.
        Press 2 if the face is male.
Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
