PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = BostonDots3_NS
  Screen = 1
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Routines
  Routine instr1_solid
    TextComponent text_2
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        We are about to begin!

        In this block, press the same
        side of the solid circle!

        We will give you two examples.
    ImageComponent ex1a
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 4.0
      image = grey_left.bmp
      size = (0.5, 0.5)
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    KeyboardComponent key_resp_3
      correctAns = 'g'
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = 'g','b','1','2'
      startVal [time (s)] = 4.0
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    ImageComponent ex1_fix
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 6.0
      image = fix.bmp
      size = (0.5, 0.5)
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    ImageComponent ex1b
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 7.0
      image = grey_right.bmp
      size = (0.5, 0.5)
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    KeyboardComponent key_resp_4
      correctAns = 'b'
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = 'b','g','1','2'
      startVal [time (s)] = 7.0
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    TextComponent text_3
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 9.5
      letterHeight = 0.1
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      text:
        Now we will begin the task.

        In 3 seconds.
    CodeComponent code_2
      Begin Routine:
        ns.sync()
        ns.send_event(key='evt+', timestamp=None, label='Solid_Block')
  Routine welcome
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to the Boston Dots Task!

        Waiting for Scanner...
    KeyboardComponent startResp1
      forceEndRoutine = True
      allowedKeys = 't'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        import egi.simple as egi
        ns = egi.Netstation()
        ns.connect('10.10.10.42', 55513)
        ns.BeginSession()
        ns.sync()
        ns.StartRecording()
      Begin Routine:
        ns.sync()
        ns.send_event(key='evt+', timestamp=None, label='Welcome')
  Routine instr3_mixed
    TextComponent text_5
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You have completed two blocks!

        In this next block, we will mix
        the two conditions!

        We will begin in 3 seconds
    CodeComponent code_5
      Begin Routine:
        ns.sync()
        ns.send_event(key='evt+', timestamp=None, label='Mixed_Block')
  Routine trial
    ImageComponent dotimage
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 1
      image [set every repeat] = $image
      size = (0.5, 0.5)
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = 'g','b','1','2'
      startVal [time (s)] = 1
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    ImageComponent fiximage
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0
      image = fix.bmp
      size = (0.5, 0.5)
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    CodeComponent code_3
      Begin Routine:
        ns.sync()
        ms_localtime = egi.ms_localtime

        ns.send_event(key='fix+', timestamp=ms_localtime(), label='fixation')
        ns.send_event(key=str(nstag), timestamp=ms_localtime() + 1000, label=str(nstag))
  Routine goodbye
    TextComponent text_6
      text = You've completed the task!
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_6
      End Routine:
        ns.StopRecording()
        ns.EndSession()
        ns.disconnect()
  Routine instr2_striped
    TextComponent instr2_text1
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You have completed one block!

        In this next block, press the opposite
        side of the striped circle!

        We will give you two examples.
    ImageComponent ex_2_1
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 4.0
      image = str_left.bmp
      size = (0.5, 0.5)
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    KeyboardComponent ex_2_1_keyb
      correctAns = 'b'
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = 'g','b','1','2'
      startVal [time (s)] = 4.0
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    ImageComponent ex2_fix
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 6.0
      image = fix.bmp
      size = (0.5, 0.5)
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    ImageComponent ex_2_2
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 7.0
      image = str_right.bmp
      size = (0.5, 0.5)
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    KeyboardComponent ex_2_2_keyb
      correctAns = 'g'
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = 'b','g','1','2'
      startVal [time (s)] = 7.0
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    TextComponent text_4
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 9.5
      letterHeight = 0.1
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      text:
        Now we will return to the task.

        In 3 seconds.
    CodeComponent code_4
      Begin Routine:
        ns.sync()
        ns.send_event(key='evt+', timestamp=None, label='Striped_Block')
Flow
  Routine welcome
  Routine instr1_solid
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = block1_solid.xlsx
    loopType = sequential
    nReps = 2
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    conditions:
      [OrderedDict([(u'trial', 1), (u'blocks', u'solid'), (u'image', u'grey_left.bmp'), (u'corrAns', u'left')]),
      OrderedDict([(u'trial', 2), (u'blocks', u'solid'), (u'image', u'grey_right.bmp'), (u'corrAns', u'right')]),
      OrderedDict([(u'trial', 3), (u'blocks', u'solid'), (u'image', u'grey_left.bmp'), (u'corrAns', u'left')]),
      OrderedDict([(u'trial', 4), (u'blocks', u'solid'), (u'image', u'grey_right.bmp'), (u'corrAns', u'right')]),
      OrderedDict([(u'trial', 5), (u'blocks', u'solid'), (u'image', u'grey_right.bmp'), (u'corrAns', u'right')]),
      OrderedDict([(u'trial', 6), (u'blocks', u'solid'), (u'image', u'grey_right.bmp'), (u'corrAns', u'right')]),
      OrderedDict([(u'trial', 7), (u'blocks', u'solid'), (u'image', u'grey_left.bmp'), (u'corrAns', u'left')]),
      OrderedDict([(u'trial', 8), (u'blocks', u'solid'), (u'image', u'grey_right.bmp'), (u'corrAns', u'right')]),
      OrderedDict([(u'trial', 9), (u'blocks', u'solid'), (u'image', u'grey_left.bmp'), (u'corrAns', u'left')]),
      OrderedDict([(u'trial', 10), (u'blocks', u'solid'), (u'image', u'grey_left.bmp'), (u'corrAns', u'left')]),
      OrderedDict([(u'trial', 11), (u'blocks', u'solid'), (u'image', u'grey_right.bmp'), (u'corrAns', u'right')]),
      OrderedDict([(u'trial', 12), (u'blocks', u'solid'), (u'image', u'grey_left.bmp'), (u'corrAns', u'left')]),
      OrderedDict([(u'trial', 13), (u'blocks', u'solid'), (u'image', u'grey_right.bmp'), (u'corrAns', u'right')]),
      OrderedDict([(u'trial', 14), (u'blocks', u'solid'), (u'image', u'grey_left.bmp'), (u'corrAns', u'left')])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
    Routine trial
  LoopTerminator trials
  Routine instr2_striped
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = block2_stripe.xlsx
    loopType = sequential
    nReps = 2
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    conditions:
      [OrderedDict([(u'trial', 1), (u'blocks', u'stripe'), (u'image', u'str_left.bmp'), (u'corrAns', u'b')]),
      OrderedDict([(u'trial', 2), (u'blocks', u'stripe'), (u'image', u'str_right.bmp'), (u'corrAns', u'g')]),
      OrderedDict([(u'trial', 3), (u'blocks', u'stripe'), (u'image', u'str_left.bmp'), (u'corrAns', u'b')]),
      OrderedDict([(u'trial', 4), (u'blocks', u'stripe'), (u'image', u'str_right.bmp'), (u'corrAns', u'g')]),
      OrderedDict([(u'trial', 5), (u'blocks', u'stripe'), (u'image', u'str_right.bmp'), (u'corrAns', u'g')]),
      OrderedDict([(u'trial', 6), (u'blocks', u'stripe'), (u'image', u'str_left.bmp'), (u'corrAns', u'b')]),
      OrderedDict([(u'trial', 7), (u'blocks', u'stripe'), (u'image', u'str_right.bmp'), (u'corrAns', u'g')]),
      OrderedDict([(u'trial', 8), (u'blocks', u'stripe'), (u'image', u'str_left.bmp'), (u'corrAns', u'b')]),
      OrderedDict([(u'trial', 9), (u'blocks', u'stripe'), (u'image', u'str_right.bmp'), (u'corrAns', u'g')]),
      OrderedDict([(u'trial', 10), (u'blocks', u'stripe'), (u'image', u'str_left.bmp'), (u'corrAns', u'b')]),
      OrderedDict([(u'trial', 11), (u'blocks', u'stripe'), (u'image', u'str_left.bmp'), (u'corrAns', u'b')]),
      OrderedDict([(u'trial', 12), (u'blocks', u'stripe'), (u'image', u'str_left.bmp'), (u'corrAns', u'b')]),
      OrderedDict([(u'trial', 13), (u'blocks', u'stripe'), (u'image', u'str_right.bmp'), (u'corrAns', u'g')]),
      OrderedDict([(u'trial', 14), (u'blocks', u'stripe'), (u'image', u'str_right.bmp'), (u'corrAns', u'g')])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
    Routine trial
  LoopTerminator trials_2
  Routine instr3_mixed
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = block3_mixed.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([(u'trial', 1), (u'blocks', u'solid'), (u'image', u'grey_left.bmp'), (u'corrAns', u'g')]),
      OrderedDict([(u'trial', 2), (u'blocks', u'stripe'), (u'image', u'str_right.bmp'), (u'corrAns', u'g')]),
      OrderedDict([(u'trial', 3), (u'blocks', u'stripe'), (u'image', u'str_left.bmp'), (u'corrAns', u'b')]),
      OrderedDict([(u'trial', 4), (u'blocks', u'stripe'), (u'image', u'str_right.bmp'), (u'corrAns', u'g')]),
      OrderedDict([(u'trial', 5), (u'blocks', u'solid'), (u'image', u'grey_right.bmp'), (u'corrAns', u'b')]),
      OrderedDict([(u'trial', 6), (u'blocks', u'solid'), (u'image', u'grey_left.bmp'), (u'corrAns', u'g')]),
      OrderedDict([(u'trial', 7), (u'blocks', u'stripe'), (u'image', u'str_right.bmp'), (u'corrAns', u'g')]),
      OrderedDict([(u'trial', 8), (u'blocks', u'stripe'), (u'image', u'str_left.bmp'), (u'corrAns', u'b')]),
      OrderedDict([(u'trial', 9), (u'blocks', u'solid'), (u'image', u'grey_left.bmp'), (u'corrAns', u'g')]),
      OrderedDict([(u'trial', 10), (u'blocks', u'stripe'), (u'image', u'str_left.bmp'), (u'corrAns', u'b')]),
      OrderedDict([(u'trial', 11), (u'blocks', u'stripe'), (u'image', u'str_left.bmp'), (u'corrAns', u'b')]),
      OrderedDict([(u'trial', 12), (u'blocks', u'solid'), (u'image', u'grey_right.bmp'), (u'corrAns', u'b')]),
      OrderedDict([(u'trial', 13), (u'blocks', u'stripe'), (u'image', u'str_right.bmp'), (u'corrAns', u'g')]),
      OrderedDict([(u'trial', 14), (u'blocks', u'solid'), (u'image', u'grey_right.bmp'), (u'corrAns', u'b')])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
    Routine trial
  LoopTerminator trials_3
  Routine goodbye
